PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Cross-Modal Reaction Time Task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Instruction
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    TextComponent instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment press the SPACEBAR as quickly as possible when you detect a stimulus.
        You will hear a sound, see a shape, or both.
        Press any key to begin.
    KeyboardComponent instr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine visual_2
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    PolygonComponent Fixation_1
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon_2
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
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    KeyboardComponent resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine Audio
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    PolygonComponent Fixation_2
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_1
      forceEndRoutine = False
      sound [set every repeat] = 500
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine Thank_you
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you for participating in the experiment
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 25
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    Routine visual_2
  LoopTerminator trials
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 25
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    Routine Audio
  LoopTerminator trials_3
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 25
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    Routine visual_2
  LoopTerminator trials_2
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = random
    nReps = 25
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    Routine Audio
  LoopTerminator trials_4
  Routine Thank_you
