PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Delay Discounting
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 12, 'delay': 1},
      {'reward_today': 11, 'future_reward': 12, 'delay': 7},
      {'reward_today': 11, 'future_reward': 12, 'delay': 14},
      {'reward_today': 11, 'future_reward': 12, 'delay': 21},
      {'reward_today': 11, 'future_reward': 12, 'delay': 30},
      {'reward_today': 11, 'future_reward': 12, 'delay': 60},
      {'reward_today': 11, 'future_reward': 13, 'delay': 90},
      {'reward_today': 11, 'future_reward': 14, 'delay': 180},
      {'reward_today': 11, 'future_reward': 17, 'delay': 365},
      {'reward_today': 11, 'future_reward': 22, 'delay': 730},
      {'reward_today': 15, 'future_reward': 16, 'delay': 1},
      {'reward_today': 15, 'future_reward': 16, 'delay': 7},
      {'reward_today': 15, 'future_reward': 16, 'delay': 14},
      {'reward_today': 15, 'future_reward': 16, 'delay': 21},
      {'reward_today': 15, 'future_reward': 16, 'delay': 30},
      {'reward_today': 15, 'future_reward': 17, 'delay': 60},
      {'reward_today': 15, 'future_reward': 17, 'delay': 90},
      {'reward_today': 15, 'future_reward': 19, 'delay': 180},
      {'reward_today': 15, 'future_reward': 23, 'delay': 365},
      {'reward_today': 15, 'future_reward': 30, 'delay': 730},
      {'reward_today': 27, 'future_reward': 28, 'delay': 1},
      {'reward_today': 27, 'future_reward': 28, 'delay': 7},
      {'reward_today': 27, 'future_reward': 28, 'delay': 14},
      {'reward_today': 27, 'future_reward': 28, 'delay': 21},
      {'reward_today': 27, 'future_reward': 29, 'delay': 30},
      {'reward_today': 27, 'future_reward': 30, 'delay': 60},
      {'reward_today': 27, 'future_reward': 31, 'delay': 90}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
    Routine trial
  LoopTerminator trials
