PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Word Priming
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_words
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone '},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 't-shirt'},
      {'study_word': 'mouse '},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'cruise'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_words': 'l_pt_p', 'reference': 'laptop', 'old_new': 'old'},
      {'test_words': '_ha_t', 'reference': 'chart', 'old_new': 'old'},
      {'test_words': 't_hi_t', 'reference': 'tshirt', 'old_new': 'old'},
      {'test_words': '_ou_e', 'reference': 'mouse', 'old_new': 'old'},
      {'test_words': 'p_st_y', 'reference': 'pastry', 'old_new': 'old'},
      {'test_words': 'c_s_', 'reference': 'case', 'old_new': 'old'},
      {'test_words': '_ru_s_', 'reference': 'cruise', 'old_new': 'old'},
      {'test_words': 'p_li_e', 'reference': 'police', 'old_new': 'old'},
      {'test_words': 'k_y_', 'reference': 'keys', 'old_new': 'old'},
      {'test_words': 'p_st_r', 'reference': 'poster', 'old_new': 'old'},
      {'test_words': '_o_rd', 'reference': 'board', 'old_new': 'old'},
      {'test_words': '_a_bl_', 'reference': 'marble', 'old_new': 'old'},
      {'test_words': '_ho_e', 'reference': 'phone', 'old_new': 'old'},
      {'test_words': '_oo_', 'reference': 'book', 'old_new': 'old'},
      {'test_words': 'c_s_io_', 'reference': 'cushion', 'old_new': 'old'},
      {'test_words': 'ta_l_', 'reference': 'table', 'old_new': 'new'},
      {'test_words': 'p_nc_l', 'reference': 'pencil', 'old_new': 'new'},
      {'test_words': 'v_s_', 'reference': 'vase', 'old_new': 'new'},
      {'test_words': 'bo_t_e', 'reference': 'bottle', 'old_new': 'new'},
      {'test_words': 'c_m_ra', 'reference': 'camera', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
