PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $font_colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 1.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b',
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Psychophy.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'word': 'RED', 'font_colour': 'red', 'con_lable': 'congruent', 'corr_resp': 'r'},
      {'word': 'BLUE', 'font_colour': 'blue', 'con_lable': 'congruent', 'corr_resp': 'b'},
      {'word': 'RED', 'font_colour': 'blue', 'con_lable': 'incongruent', 'corr_resp': 'b'},
      {'word': 'BLUE', 'font_colour': 'red', 'con_lable': 'incongruent', 'corr_resp': 'r'}]
    Routine trial
  LoopTerminator trials
